PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = memoryagain
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment
        Press 'space' to start
    KeyboardComponent resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Study
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stim_word
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  Routine Instructions
    TextComponent instructiontext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Get ready for the test

        Press 'y' when you see a familiar word
        Otherwise press 'n'

        Press 'space' to start
    KeyboardComponent intstruction_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test
    CodeComponent testcode
      Code Type = Auto->JS
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      Begin Routine:
        #check if our old_new status is old or new and assign corr_resp
        if(old_new == 'old'):
            corr_resp = 'y'
        else:
             corr_resp = 'n'
        thisExp.addData ('corr_resp', corr_resp)
    TextComponent text_test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_word
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    KeyboardComponent key_resp_test
      allowedKeys = 'y','n'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine End
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you for participating!
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  Routine feedback
    CodeComponent codefeedback
      Code Type = Auto->JS
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      Begin Routine:
        item_status = ''

        if(old_new == 'old'):
            if(key_resp_test.corr == 1):
               feedback_text = "congratulations\n\n It was old and you knew it!!"
               item_status = 'hit'
            else:
               feedback_text = "Sorry\n\n you got it wrong :("
               item_status = 'miss'
        else:
            if(key_resp_test.corr == 1):
                feedback_text = "congratulations\n\n you didn't get fooled"
                item_status = 'correct rejection'

            else:
                feedback_text = "Sorry\n\n  That was a new item"
                item_status = 'false alarm'

        thisExp.addData ('item_status', item_status)
    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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Flow
  Routine Welcome
  LoopInitiator studytrial loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = C:/Users/admin/Documents/Psychopy Experiments/Project/test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_word': 'clothes', 'old_new': 'old'},
      {'stim_word': 'book', 'old_new': 'old'},
      {'stim_word': 'Ruler', 'old_new': 'old'},
      {'stim_word': 'Diamond', 'old_new': 'old'},
      {'stim_word': 'Car', 'old_new': 'old'},
      {'stim_word': 'Palace', 'old_new': 'new'},
      {'stim_word': 'Airplane', 'old_new': 'new'},
      {'stim_word': 'bird', 'old_new': 'new'}]
    Routine Study
  LoopTerminator studytrial
  Routine Instructions
  LoopInitiator trialtest loopType="TrialHandler"
    conditionsFile = C:/Users/admin/Documents/Psychopy Experiments/Project/test.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'stim_word': 'clothes', 'old_new': 'old'},
      {'stim_word': 'book', 'old_new': 'old'},
      {'stim_word': 'Ruler', 'old_new': 'old'},
      {'stim_word': 'Diamond', 'old_new': 'old'},
      {'stim_word': 'Car', 'old_new': 'old'},
      {'stim_word': 'Palace', 'old_new': 'new'},
      {'stim_word': 'Airplane', 'old_new': 'new'},
      {'stim_word': 'bird', 'old_new': 'new'}]
    Routine Test
    Routine feedback
  LoopTerminator trialtest
  Routine End
