PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = wordpriming
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        time_text.text = ''
      Each Frame:
        time_text.text = str(round(10-routineTimer.getTime()))
      End Routine:
        item_status= ''

        if(textbox.text == corrAns):
            corrAns= 0
            item_status = 'hit'
        else:
            item_status = 'miss'

        thisExp.addData ('item_status', item_status)
    TextComponent time_text
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $round(10 - t, ndigits = 1)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/admin/Documents/Psychopy Experiments/tutorial 5/study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words_referencecopy.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': '_a_e', 'reference_word': 'vase', 'old_new': 'old'},
      {'test_word': 'l_n_', 'reference_word': 'link', 'old_new': 'new'},
      {'test_word': 'w_ll_t', 'reference_word': 'wallet', 'old_new': 'new'},
      {'test_word': '_i_e_', 'reference_word': 'tiger', 'old_new': 'old'},
      {'test_word': '_oo_', 'reference_word': 'book', 'old_new': 'old'},
      {'test_word': 'k_t_h_n', 'reference_word': 'kitchen', 'old_new': 'new'},
      {'test_word': 'c_s_i_n', 'reference_word': 'cushion', 'old_new': 'old'},
      {'test_word': '_i_k', 'reference_word': 'sink', 'old_new': 'new'},
      {'test_word': '_i_n_', 'reference_word': 'piano', 'old_new': 'old'},
      {'test_word': '_i_d', 'reference_word': 'bird', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
