PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delaydiscounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent bg_polygon
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent selection_text
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = Choose One
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    TextComponent condition1text
      color = -0.0039, 1.0000, 0.6627
      letterHeight = 0.03
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text [set every repeat] = $FixedEntry
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    PolygonComponent box1_polygon
      lineColor = 0.7255, -0.8431, -0.5294
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent condition2text
      color = -0.0039, 1.0000, 0.6627
      letterHeight = 0.03
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text [set every repeat] = $VariableEntry
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    PolygonComponent box2_polygon
      lineColor = 0.7255, -0.8431, -0.5294
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        time_text.text = ''
      Each Frame:
        time_text.text = str(round(15-routineTimer.getTime()))
    TextComponent time_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      text [set every frame] = $round(15 - t, ndigits = 1)
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  Routine blank
    PolygonComponent blank_polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tempconditionfile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'FixedEntry': '500 Rupees Immediately', 'VariableEntry': '1500 Rupees in 60 Days', 'reward_today': 500, 'future_reward': 1500, 'delay': 60},
      {'FixedEntry': '500 Rupees in 90 Days', 'VariableEntry': '300 Rupees Immediately', 'reward_today': 300, 'future_reward': 500, 'delay': 90},
      {'FixedEntry': '500 Rupees Immediately', 'VariableEntry': '4500 Rupees in 90 Days', 'reward_today': 500, 'future_reward': 4500, 'delay': 90},
      {'FixedEntry': '3000 Rupees in 90 Days', 'VariableEntry': '500 Rupees Immediately', 'reward_today': 500, 'future_reward': 3000, 'delay': 90},
      {'FixedEntry': '400 Rupees Immediately', 'VariableEntry': '1500 Rupees in 90 Days', 'reward_today': 400, 'future_reward': 1500, 'delay': 90},
      {'FixedEntry': '5000 Rupees in 90 Days', 'VariableEntry': '650 Rupees Immediately', 'reward_today': 650, 'future_reward': 5000, 'delay': 90},
      {'FixedEntry': '450 Rupees Immediately', 'VariableEntry': '1000 Rupees in 180 Days', 'reward_today': 450, 'future_reward': 1000, 'delay': 180},
      {'FixedEntry': '3000 Rupees in 180 Days', 'VariableEntry': '700 Rupees Immediately', 'reward_today': 700, 'future_reward': 3000, 'delay': 180},
      {'FixedEntry': '450 Rupees Immediately', 'VariableEntry': '900 Rupees in 180 Days', 'reward_today': 450, 'future_reward': 900, 'delay': 180},
      {'FixedEntry': '25000 Rupees in 365 Days', 'VariableEntry': '500 Rupees Immediately', 'reward_today': 500, 'future_reward': 25000, 'delay': 365}]
    Routine trial
    Routine blank
  LoopTerminator trials
